CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (directory does contain "C:\\Users\\HarmonyWS\\Desktop\\osheen\\Analysis_Proj1\\Set1_cellpose\\")
    Name to assign these images:Cellpose
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does endwith "ch1.tiff")
    Name to assign these images:Fibroblast
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (directory does contain "C:\\Users\\HarmonyWS\\Desktop\\osheen\\Analysis_Proj1\\Set1_merged_FOVs\\") (file does contain "ch2.tiff")
    Name to assign these images:Cancer
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does endwith "ch4.tiff")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Dapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):2,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:6|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
    Select the input image:Cellpose
    Name the output image:Cellpose_thres
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.34
    Threshold correction factor:1.34
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Cellpose
    Name the primary objects to be identified:Cancer
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.34
    Threshold correction factor:1.34
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
RelateObjects:[module_num:8|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
    Parent objects:Cancer
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:9|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
    Select the objects to filter:Cancer
    Name the output objects:CancerPosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Cancer, Dapi, Fibroblast
    Select objects to measure:Cancer, CancerPosNuclei

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cancer, CancerPosNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:12|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
    Select images to measure:Cancer, Dapi, Fibroblast
    Measure within objects?:Yes
    Select objects to measure:Cancer, CancerPosNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\Users\\HarmonyWS\\Desktop\\osheen\\Analysis_Proj1\\CP Features\\N8A82
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cancer|Intensity_LowerQuartileIntensity_Fibroblast,Cancer|Intensity_LowerQuartileIntensity_Dapi,Cancer|Intensity_LowerQuartileIntensity_Cancer,Cancer|Intensity_MaxIntensityEdge_Cancer,Cancer|Intensity_MaxIntensityEdge_Dapi,Cancer|Intensity_MaxIntensityEdge_Fibroblast,Cancer|Intensity_IntegratedIntensity_Fibroblast,Cancer|Intensity_IntegratedIntensity_Cancer,Cancer|Intensity_IntegratedIntensity_Dapi,Cancer|Intensity_MedianIntensity_Cancer,Cancer|Intensity_MedianIntensity_Fibroblast,Cancer|Intensity_MedianIntensity_Dapi,Cancer|Intensity_MinIntensity_Cancer,Cancer|Intensity_MinIntensity_Dapi,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CPFeatures
    Overwrite existing files without warning?:No
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